PsychoPy2experiment version="2024.2.2a1"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Data filename = u'data/%s/%s_%s_%s' % (expInfo['participant'], expInfo['participant'], expName, expInfo['session'])
  Experiment info = {'participant': 'f"sas_{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = trigger_table
  keyboardBackend = ioHub
  logging level = debug
  measureFrameRate = False
  runMode = 1
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Routines
  Routine __start__
    RoutineSettingsComponent __start__
      saveStartStop = False
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    TextComponent text_prepare_table
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Setting up the pulse table...
      units = norm
      wrapWidth = 1.8
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    CodeComponent start_trigger_table
      Code Type = Py
      Before Experiment:
        import pyxid2
        import threading
        import signal


        def exit_after(s):
            '''
            function decorator to raise KeyboardInterrupt exception
            if function takes longer than s seconds
            '''
            def outer(fn):
                def inner(*args, **kwargs):
                    timer = threading.Timer(s, signal.raise_signal, args=[signal.SIGINT])
                    timer.start()
                    try:
                        result = fn(*args, **kwargs)
                    finally:
                        timer.cancel()
                    return result
                return inner
            return outer


        @exit_after(1)  # exit if function takes longer than 1 seconds
        def _get_xid_devices():
            return pyxid2.get_xid_devices()


        def get_xid_devices():
            print("Getting a list of all attached XID devices...")
            attempt_count = 0
            while attempt_count >= 0:
                attempt_count += 1
                print('     Attempt:', attempt_count)
                attempt_count *= -1  # try to exit the while loop
                try:
                    devices = _get_xid_devices()
                except KeyboardInterrupt:
                    attempt_count *= -1  # get back in the while loop
            return devices


        def generate_random_pulse_times(num_pulses=90, mean_interval_sec=60, rng=np.random.default_rng()):
            """
            Generate random pulse times spaced around a mean interval.

            :param num_pulses: Number of pulses to generate
            :param mean_interval_sec: Mean interval in seconds between pulses
            :param rng: Random number generator instance
            :return: List of pulse times in milliseconds
            """
            assert 0 < num_pulses <= 95, "Number of pulses must be between 1 and 95."

            min_interval_100ms = mean_interval_sec // 2 * 10
            max_interval_100ms = mean_interval_sec * 10 + min_interval_100ms
            intervals = rng.choice(
                np.arange(min_interval_100ms, max_interval_100ms + 1),
                size=num_pulses,
                replace=False
            )
            intervals_ms = intervals * 100  # convert to milliseconds

            return np.cumsum(intervals_ms).astype(int).tolist()


        devices = get_xid_devices()
        assert devices, "No XID device found. Cannot send synchronizing triggers."

        dev = devices[0]
        print("Found device:", dev)
        assert dev.device_name == 'Cedrus StimTracker Quad', "Incorrect StimTracker detected."

        if dev.is_pulse_table_running():
            dev.stop_pulse_table()

        dev.set_lines(0x0000)
        dev.clear_pulse_table()

        # pulse duration in milliseconds
        pulse_duration = 50  # ms
        dev.set_pulse_duration(pulse_duration)

        # Start EEG recording
        print("Sending trigger code 126 to start EEG recording...")
        dev.activate_line(bitmask=126)  # trigger 126 will start EEG
        print("Waiting 10 seconds for the EEG recording to start...\n")
        core.wait(10)  # wait 10s for the EEG system to start recording

        # Marching lights test
        print("M-POD<->eego 7-bit trigger lines test...")
        for line in range(1, 8):  # raise lines 1-7 one at a time
            print("  raising line {} (bitmask {})".format(line, 2 ** (line-1)))
            dev.activate_line(lines=line)
            core.wait(0.5)  # wait 500ms between two consecutive triggers
        dev.set_lines(0x0000)
        print("EEG system is now ready for the experiment to start.\n")
      Begin Experiment:
        # set a random seed for reproducibility
        rng = np.random.default_rng(seed=6841707)  # 6841707 is big-endian for "has"

        # send 4 pulses spaced 1000ms apart to indicate the start of the table
        initial_pulse_ms = [0, 1000, 2000, 3000]  # initial pulses only raise line 6

        for pulse_time in initial_pulse_ms:
            dev.add_pulse_table_entry(pulse_time, 0x0040)  # 0x0040 = 64 = raising line 6
            dev.add_pulse_table_entry(pulse_time + pulse_duration, 0x0000)  # reset line 6 after pulse duration

        # now add 90 pulses spaced randomly around 60000ms=60s=1min apart
        pulse_times = generate_random_pulse_times(num_pulses=90, mean_interval_sec=60, rng=rng)
        pulse_times += initial_pulse_ms[-1]  # shift all pulse times to start after the initial pulses

        for pulse_time in pulse_times:
            dev.add_pulse_table_entry(pulse_time, 0x003F)  # 0x003F = 63 = raising lines 0 to 5
            dev.add_pulse_table_entry(pulse_time + pulse_duration, 0x0000)  # reset all lines after pulse duration

        dev.add_pulse_table_entry(0xFFFFFFFF, 0x0000)  # repeat the pulse table indefinitely
        dev.run_pulse_table()

        assert dev.is_pulse_table_running(), "Pulse table is not running successfully."
      End Experiment:
        # Stop EEG recording
        dev.activate_line(bitmask=127)  # trigger 127 will stop EEG
  Routine __end__
    RoutineSettingsComponent __end__
      saveStartStop = False
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    TextComponent text_disconnect_ready
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Triggers are now sending. Ready to disconnect.
      units = norm
      wrapWidth = 1.8
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Flow
  Routine __start__
  Routine __end__
